PsychoPy2experiment version="2025.2.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=97F886BC
  Data filename = u'data/%s_%s_%s' % (expInfo['participant_id'], expName, expInfo['date'])
  Experiment info = {'participant_id': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  color = $[1,1,1]
  expName = fisher_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine baskets
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    ImageComponent basketLeft
      image = stimuli/basket.png
      interpolate = nearest
      pos [set every repeat] = $(left_basketX, left_basketY)
      size [set every repeat] = $(Basket_G*basket_size, Basket_G*basket_size*527/555)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1
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    ImageComponent basketRight
      image = stimuli/basket.png
      interpolate = nearest
      pos [set every repeat] = $(right_basketX, right_basketY)
      size [set every repeat] = $(Basket_D*basket_size, Basket_D*basket_size*527/555)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1
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    TextComponent cross_2
      color = black
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        mouse.setVisible(False)
  Routine breakscreen
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    CodeComponent breakCode
      Code Type = Auto->JS
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      Begin Routine:
        perc = str(round(trials_2.thisTrialN /8*100))
      Each Frame:
        if trials_2.thisTrialN < 1 :
            continueRoutine = False
    TextComponent breakText
      color = black
      letterHeight = 0.055
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You can take a short break to rest.\n\nYou have completed ' + perc + '% of the experiment.\n\nPress Space when you are ready to continue.'
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    KeyboardComponent space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fullscreen3
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Reminder: Please do not press Esc at any point, because it will exit fullscreen.
        If you do, use F11 to come back to fullscreen (Windows).
    CodeComponent alignText4
      Code Type = Auto->JS
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  Routine instructions1
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    CodeComponent setNspaces
      Code Type = Auto->JS
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      Begin Experiment:
        nspaces = -1
    CodeComponent alignTexts1
      Code Type = Both
      Begin JS Routine:
        helloText.setAlignHoriz('center');
        fullscreen.setAlignHoriz('center');
        inEachTrial.setAlignHoriz('center');
        whichLake.setAlignHoriz('center');
        twoInformation.setAlignHoriz('center');
        preference.setAlignHoriz('center');
        preferenceExplanation.setAlignHoriz('center');
        proportions.setAlignHoriz('center');
        proportionsExplanation.setAlignHoriz('center');
        upToYou.setAlignHoriz('center');
    TextComponent helloText
      color = black
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Hello
        Thank you for your participation

        The experiment will begin shortly.
    TextComponent fullscreen
      color = black
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        Please do not press Esc at any point, because it will exit fullscreen.
        If you do, please try to put your browser in fullscreen again (usually by pressing F11 on Windows).
    TextComponent spaceText1
      color = $[-0.05, -0.05, -0.05]
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press Space to proceed
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    TextComponent inEachTrial
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
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      text:
        In each trial of the experiment, you will have to determine where the *red* fish came from.

        Here is the fish just caught by the fisher.
    ImageComponent fisherman1
      image = stimuli/hum.png
      opacity = 0
      pos = (0, -0.15)
      size = (0.26, 0.39)
      startVal [time (s)] = 0.0
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    TextComponent whichLake
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
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      text:
        But from which of the two lakes
        did the fish come from?
    ImageComponent lake1
      image = stimuli/lake.jpg
      interpolate = nearest
      opacity = 0
      pos = (-0.23, 0.00)
      size = (0.3275, 0.3275)
      startVal [time (s)] = 0.0
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    ImageComponent lake2
      image = stimuli/lake.jpg
      interpolate = nearest
      opacity = 0
      pos = (0.23, 0.0)
      size = (0.3275, 0.3275)
      startVal [time (s)] = 0.0
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    TextComponent twoInformation
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = To answer you will have to combine two kinds of information.
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    TextComponent preference
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = 1) The time spent by the fisher to fish at the right or the left lake.
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    TextComponent example
      color = black
      letterHeight = 0.042
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = For example
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    ImageComponent basket1
      image = stimuli/basket.png
      opacity = 0
      pos = (-0.23, 0)
      size = (0.349027907, 0.282842712)
      startVal [time (s)] = 0.0
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    ImageComponent basket2
      image = stimuli/basket.png
      opacity = 0
      pos = (0.23, 0)
      size = (0.174513954, 0.141421356)
      startVal [time (s)] = 0.0
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    TextComponent preferenceExplanation
      color = black
      letterHeight = 0.042
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = A larger basket on the left indicates that the fisher spent more time on the left lake than on the right.
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    TextComponent proportions
      color = black
      letterHeight = 0.05
      pos = (1, 1)
      startVal [time (s)] = 0.0
      text = 2) The *proportions* of red and black fish in each lake.
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    ImageComponent lakeMore
      image = stimuli/lake_more.jpg
      interpolate = nearest
      opacity = 0
      pos = (-0.23, 0)
      size = (0.3275, 0.3275)
      startVal [time (s)] = 0.0
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    ImageComponent lakeLess
      image = stimuli/lake_less.jpg
      interpolate = nearest
      opacity = 0
      pos = (0.25, 0)
      size = (0.3275, 0.3275)
      startVal [time (s)] = 0.0
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    TextComponent proportionsExplanation
      color = black
      letterHeight = 0.042
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = There are more red fish in the left lake.
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    TextComponent upToYou
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = Given this information, how confident are you that the fish came from the right or the left lake?
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    CodeComponent spaceEffects1
      Code Type = Both
      Each Frame:
        if event.getKeys('space'):
            nspaces = nspaces + 1
            if nspaces == 0:
                helloText.pos = (0, 1)
                fullscreen.pos = (0, 1)
                inEachTrial.pos = (0, 0.25)
                fisherman1.opacity = 1
            if nspaces == 1:
                inEachTrial.pos = (0, 1)
                fisherman1.opacity = 0
                whichLake.pos = (0, 0.35)
                lake1.opacity = 1
                lake2.opacity = 1
                twoInformation.pos = (0, -0.25)
            if nspaces == 2:
                whichLake.pos = (0, 1)
                lake1.opacity = 0
                lake2.opacity = 0
                twoInformation.pos = (0, 1)
                preference.pos = (0, 0.35)
                example.pos = (0, 0.25)
                basket1.opacity = 1
                basket2.opacity = 1
                preferenceExplanation.pos = (0, -0.3)
            if nspaces == 3:
                preference.pos = (0, 1)
                basket1.opacity = 0
                basket2.opacity = 0
                preferenceExplanation.pos = (0, 1)
                proportions.pos = (0, 0.35)
                lakeMore.opacity = 1
                lakeLess.opacity = 1
                proportionsExplanation.pos = (0, -0.3)
            if nspaces == 4:
                proportions.pos = (0, 1)
                example.pos = (0, 1)
                lakeMore.opacity = 0
                lakeLess.opacity = 0
                proportionsExplanation.pos = (0, 1)
                upToYou.pos = (0, 0.3)
                fisherman1.opacity = 1
            if nspaces == 5:
                upToYou.pos = (0, 1)
                fisherman1.opacity = 0
                helloText.pos = (0, 0.1)
                fullscreen.pos = (0, -0.25)
                continueRoutine = False
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList:['space']})
        if (theseKeys.length > 0) {
            nspaces = (nspaces + 1);
            if ((nspaces === 0)) {
                helloText.pos = [0, 1];
                fullscreen.pos = [0, 1];
                inEachTrial.pos = [0, 0.25];
                fisherman1.opacity = 1;
            }
            if ((nspaces === 1)) {
                inEachTrial.pos = [0, 1];
                fisherman1.opacity = 0;
                whichLake.pos = [0, 0.35];
                lake1.opacity = 1;
                lake2.opacity = 1;
                twoInformation.pos = [0, (- 0.25)];
            }
            if ((nspaces === 2)) {
                whichLake.pos = [0, 1];
                lake1.opacity = 0;
                lake2.opacity = 0;
                twoInformation.pos = [0, 1];
                preference.pos = [0, 0.35];
                example.pos = [0, 0.17];
                basket1.opacity = 1;
                basket2.opacity = 1;
                preferenceExplanation.pos = [0, (- 0.3)];
            }
            if ((nspaces === 3)) {
                preference.pos = [0, 1];
                basket1.opacity = 0;
                basket2.opacity = 0;
                preferenceExplanation.pos = [0, 1];
                proportions.pos = [0, 0.35];
                lakeMore.opacity = 1;
                lakeLess.opacity = 1;
                proportionsExplanation.pos = [0, (- 0.3)];
            }
            if ((nspaces === 4)) {
                proportions.pos = [0, 1];
                example.pos = [0, 1];
                lakeMore.opacity = 0;
                lakeLess.opacity = 0;
                proportionsExplanation.pos = [0, 1];
                upToYou.pos = [0, 0.3];
                fisherman1.opacity = 1;
            }
            if ((nspaces === 5)) {
                upToYou.pos = [0, 1];
                fisherman1.opacity = 0;
                helloText.pos = [0, 0.1];
                fullscreen.pos = [0, (- 0.25)];
                continueRoutine = false;
            }
        }
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent mouseAtStart
      Code Type = Auto->JS
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      Begin Routine:
        mouse_2.setVisible(True)
        mouse_2.setPos([0,-0.5])
  Routine instructions2
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    CodeComponent alignTexts2
      Code Type = Auto->JS
    TextComponent howToAnswer
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        To answer, you will have to click with your cursor on a semi-circular scale.

        You should try to be as precise and as fast as possible.
    ImageComponent instrScale
      image = stimuli/scale.png
      pos = (0, -0.26)
      size = (0.4, 0.20)
      startVal [time (s)] = 0
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    ImageComponent cursor
      image = stimuli/cursor.png
      pos = (-0.01, -0.4)
      size = (0.043, 0.09)
      startVal [time (s)] = 0.0
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    TextComponent instrSureRight
      color = $colorScale
      languageStyle = RTL
      letterHeight = 0.03
      pos = $instrRightPos
      startVal [time (s)] = 0
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      text:
        I'm sure
        RIGHT LAKE
    TextComponent instrSureLeft
      color = $colorScale
      letterHeight = 0.03
      pos = $instrLeftPos
      startVal [time (s)] = 0
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      text:
        I'm sure
        LEFT LAKE
    TextComponent instrKnow
      color = $colorScale
      letterHeight = 0.03
      pos = (0, -0.125)
      startVal [time (s)] = 0
      text = I don't know
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    TextComponent uncertain
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = For example, if you are uncertain, you should click close to "I don't know".
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    TextComponent answerRight
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
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      text:
        If you are sure that the fish came from the right lake, you should click close to
        "I'm sure RIGHT LAKE".
    TextComponent answerLeft
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
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      text:
        If you are sure that the fish came from the left lake, you should click close to
        "I'm sure LEFT LAKE".
    TextComponent somewhatRight
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = Now, if you think that the fish came from the right lake, but you have doubts, you can answer like this:
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    TextComponent somewhatLeft
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = Similarly, if you think that the fish came from the left lake, but you have doubts, you can answer like this:
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    CodeComponent spaceEffects2
      Code Type = Both
      Each Frame:
        if event.getKeys('space'):
            nspaces = nspaces + 1
            if nspaces == 6:
                howToAnswer.pos = (0, 1)
                uncertain.pos = (0, 0.2)
                cursor.pos = (-0.01, -0.2)
            if nspaces == 7:
                uncertain.pos = (0, 1)
                answerRight.pos = (0, 0.2)
                cursor.pos = (0.15, -0.365)
            if nspaces == 8:
                answerRight.pos = (0, 1)
                answerLeft.pos = (0, 0.2)
                cursor.pos = (-0.17, -0.365)
            if nspaces == 9:
                answerLeft.pos = (0, 1)
                somewhatRight.pos = (0, 0.2)
                rightArrow.opacity = 1
                wholeScale.pos = (0.39, -0.185)
                cursor.pos = (0.12, -0.28)
            if nspaces == 10:
                somewhatRight.pos = (0, 1)
                rightArrow.opacity = 0
                leftArrow.opacity = 1
                wholeScale.pos = (-0.4, -0.185)
                somewhatLeft.pos = (0, 0.2)
                cursor.pos = (-0.14, -0.28)
            if nspaces == 11:
                leftArrow.opacity = 0
                somewhatLeft.pos = (0, 1)
                cursor.pos = (-0.01, -0.4)
                cursor.opacity = 0
                instrScale.opacity = 0
                instrKnow.pos = (0, 1)
                instrSureLeft.pos = (0, 1)
                instrSureRight.pos = (0, 1)
                wholeScale.pos = (0, 1)
                newExample.pos = (0, 0.3)
                basket3.opacity = 1
                basket4.opacity = 1
            if nspaces == 12:
                newExample.pos = (0, 1)
                basket3.opacity = 0
                basket4.opacity = 0
                asManyFish.pos = (0, 0.3)
                lake501.opacity = 1
                lake502.opacity = 1
            if nspaces == 13:
                asManyFish.pos = (0, 1)
                lake501.opacity = 0
                lake502.opacity = 0
                whatConfidence.pos = (0, 0.4)
                fisherman2.opacity = 1
                instrScale.opacity = 1
                instrKnow.pos = (0, -0.125)
                cursor.opacity = 1
                instrSureRight.pos = instrRightPos
                instrSureLeft.pos  = instrLeftPos
            if nspaces == 14:
                box.opacity = 1
                wellDone.pos = (-0.25, -0.235)
            if nspaces == 15:
                wellDone.pos = (0, 1)
                box.opacity = 0
                howToAnswer.pos = (0, 0.2)
                whatConfidence.pos = (0, 1)
                fisherman2.opacity = 0
                nspaces = -2
                continueRoutine = False
      Each JS Frame:
        let theseKeys2 = psychoJS.eventManager.getKeys({keyList:['space']})
        if (theseKeys2.length > 0) {
            nspaces = (nspaces + 1);
            if ((nspaces === 6)) {
                howToAnswer.pos = [0, 1];
                uncertain.pos = [0, 0.2];
                cursor.pos = [(- 0.01), (- 0.2)];
            }
            if ((nspaces === 7)) {
                uncertain.pos = [0, 1];
                answerRight.pos = [0, 0.2];
                cursor.pos = [0.15, (- 0.365)];
            }
            if ((nspaces === 8)) {
                answerRight.pos = [0, 1];
                answerLeft.pos = [0, 0.2];
                cursor.pos = [(- 0.17), (- 0.365)];
            }
            if ((nspaces === 9)) {
                answerLeft.pos = [0, 1];
                somewhatRight.pos = [0, 0.2];
                rightArrow.opacity = 1;
                wholeScale.pos = [0.39, (- 0.185)];
                cursor.pos = [0.12, (- 0.28)];
            }
            if ((nspaces === 10)) {
                somewhatRight.pos = [0, 1];
                rightArrow.opacity = 0;
                leftArrow.opacity = 1;
                wholeScale.pos = [(- 0.4), (- 0.185)];
                somewhatLeft.pos = [0, 0.2];
                cursor.pos = [(- 0.14), (- 0.28)];
            }
            if ((nspaces === 11)) {
                leftArrow.opacity = 0;
                somewhatLeft.pos = [0, 1];
                cursor.pos = [(- 0.01), (- 0.4)];
                cursor.opacity = 0;
                instrScale.opacity = 0;
                instrLeft.pos = [0, 1];
                instrRight.pos = [0, 1];
                instrKnow.pos = [0, 1];
                instrSureLeft.pos = [0, 1];
                instrSureRight.pos = [0, 1];
                wholeScale.pos = [0, 1];
                newExample.pos = [0, 0.3];
                basket3.opacity = 1;
                basket4.opacity = 1;
            }
            if ((nspaces === 12)) {
                newExample.pos = [0, 1];
                basket3.opacity = 0;
                basket4.opacity = 0;
                asManyFish.pos = [0, 0.3];
                lake501.opacity = 1;
                lake502.opacity = 1;
            }
            if ((nspaces === 13)) {
                asManyFish.pos = [0, 1];
                lake501.opacity = 0;
                lake502.opacity = 0;
                whatConfidence.pos = [0, 0.4];
                fisherman2.opacity = 1;
                instrScale.opacity = 1;
                instrLeft.pos = [(- 0.235), (- 0.4)];
                instrRight.pos = [0.229, (- 0.4)];
                instrKnow.pos = [0, (- 0.125)];
                instrSureLeft.pos = [(- 0.262), (- 0.365)];
                instrSureRight.pos = [0.262, (- 0.365)];
                cursor.opacity = 1;
            }
            if ((nspaces === 14)) {
                box.opacity = 1;
                wellDone.pos = [(- 0.25), (- 0.235)];
            }
            if ((nspaces === 15)) {
                wellDone.pos = [0, 1];
                box.opacity = 0;
                howToAnswer.pos = [0, 0.2];
                whatConfidence.pos = [0, 1];
                fisherman2.opacity = 0;
                nspaces = (-2);
                continueRoutine = false;
            }
        }
    TextComponent newExample
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
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      text:
        Let's look at another example.

        If the fisher spent more time to fish at the left lake as shown here
    ImageComponent basket3
      image = stimuli/basket.png
      opacity = 0
      pos = (-0.23, -0.05)
      size = (0.349027907, 0.282842712)
      startVal [time (s)] = 0.0
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    ImageComponent basket4
      image = stimuli/basket.png
      opacity = 0
      pos = (0.23, -0.05)
      size = (0.174513954, 0.141421356)
      startVal [time (s)] = 0.0
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    TextComponent asManyFish
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = ...and there are as many red and black fish in the left lake as in the right one
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    ImageComponent lake501
      image = stimuli/lake501.jpg
      interpolate = nearest
      opacity = 0
      pos = (-0.23, 0)
      size = (0.3275, 0.3275)
      startVal [time (s)] = 0.0
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    ImageComponent lake502
      image = stimuli/lake502.jpg
      interpolate = nearest
      opacity = 0
      pos = (0.25, 0)
      size = (0.3275, 0.3275)
      startVal [time (s)] = 0.0
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    TextComponent whatConfidence
      color = black
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = What is your confidence about the fish's lake of origin?
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    ImageComponent fisherman2
      image = stimuli/hum.png
      opacity = 0
      pos = (0, 0.12)
      size = (0.22, 0.33)
      startVal [time (s)] = 0.0
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    TextComponent spaceText2
      color = $[-0.05, -0.05, -0.05]
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press Space to proceed
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    ImageComponent leftArrow
      image = stimuli/left_arrow.png
      opacity = 0
      pos = (-0.185, -0.225)
      size = (0.1452, 0.1914)
      startVal [time (s)] = 0.0
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    ImageComponent rightArrow
      image = stimuli/right_arrow.png
      opacity = 0
      pos = (0.18, -0.23)
      size = (0.144, 0.18)
      startVal [time (s)] = 0.0
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    TextComponent wholeScale
      color = $[0.5, -1, -1]
      letterHeight = 0.035
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = Use the whole scale!
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    ImageComponent box
      image = stimuli/box.png
      opacity = 0
      pos = (-0.1265, -0.2565)
      size = (0.125, 0.105)
      startVal [time (s)] = 0.0
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    TextComponent wellDone
      color = $[0.5, -1, -1]
      letterHeight = 0.03
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text = Well done!
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  Routine instructionsRepeat
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    CodeComponent mouseProceed
      Code Type = Both
      Each Frame:
        if (mouse.getPressed()[0] == 1 or mouse.getPressed()[1] == 1 or mouse.getPressed()[2] == 1):
            instructions.finished = True
            continueRoutine = False
      Each JS Frame:
        if ((((mouse.getPressed()[0] === 1) || (mouse.getPressed()[1] === 1)) || (mouse.getPressed()[2] === 1))) {
            trials.finished = true;
            continueRoutine = false;
        }
    TextComponent repeatLoop
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        If you understood the instructions click with your mouse to proceed to some training trials.

        Otherwise, press Space to see the instructions again.
    KeyboardComponent keySpace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent alignTextsRepeat
      Code Type = JS
      Begin JS Routine:
        repeatLoop.setAlignHoriz('center');
  Routine toExperiment
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    TextComponent trainingText
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Training trials are over.

        Press Space when you are ready to proceed to the main experiment.
    KeyboardComponent space2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fullscreen2
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Reminder: Please do not press Esc at any point, because it will exit fullscreen.
        If you do, please press F11 to come back to fullscreen (Windows).
    CodeComponent alignText3
      Code Type = Auto->JS
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    TextComponent wholeScaleReminder
      color = $[0.5, -1, -1]
      letterHeight = 0.05
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
      text = Please remember to use the whole scale!
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  Routine finalScreen
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    TextComponent finalText1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The experiment is now over, thank you for taking part.
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    KeyboardComponent finalSpace1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent spaceFinal1
      color = $[-0.05, -0.05, -0.05]
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press Space to proceed
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    CodeComponent alignTextFinal
      Code Type = Both
      Begin JS Routine:
        finalText1.setAlignHoriz('center');
        spaceFinal1.setAlignHoriz('center');
  Routine Variable
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    CodeComponent Variables
      Code Type = Auto->JS
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      Begin Experiment:
        basket_size = 0.0035
        lake_size = 0.7

        left_lakeX = -0.25
        left_lakeY = 0.25
        right_lakeX = 0.25
        right_lakeY = 0.25

        left_basketX = -0.25
        left_basketY = 0.25
        right_basketX = 0.25
        right_basketY = 0.25

        widthBasketLeft = 0.1
        heightBasketLeft = 0.1
        widthBasketRight = 0.1
        heightBasketRight = 0.1

        colorScale = [-1,-1,-1]

        instrRightPos = (0.31, -0.365)
        instrLeftPos = (-0.31, -0.365)

        sureRightPos = (0.31, -0.43)
        sureLeftPos = (-0.31, -0.43)
  Routine Screen
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    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;

        let asarray=function(something) {
          return something;
        }
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' normalisé'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' hauteur'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale = round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale = round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale = round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale = round((x_scale+dscale)*10000)/10000
            screen_height = round(vsize*10/y_scale)/10
            #text_bottom.text='X = '+str(x_scale)+unittext+' par cm, Y = '+str(y_scale)+unittext+' par cm\nHauteur écran = '+str(screen_height)+' cm\n\nAppuyer sur la barre espace pour valider'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    ImageComponent image
      image = ConsigneCB.JPG
      size = 2
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent ccimage
      image = bank-1300155_640.jpg
      pos = (0, -0.3)
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      units = norm
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  Routine choice_train
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    ImageComponent left_lake
      image [set every repeat] = $Lake_pic_G
      pos [set every repeat] = $(left_lakeX, left_lakeY)
      size [set every repeat] = (0.450*lake_size, 0.450*lake_size)
      startVal [time (s)] = 0.05
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    ImageComponent right_lake
      image [set every repeat] = $Lake_pic_D
      pos [set every repeat] = $(right_lakeX, right_lakeY)
      size [set every repeat] = (0.450*lake_size, 0.450*lake_size)
      startVal [time (s)] = 0.05
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    ImageComponent fisherman
      image = stimuli/hum.png
      pos = (0, 0.00)
      size = (0.20, 0.22)
      startVal [time (s)] = 0.05
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    ImageComponent scale
      image = stimuli/scale.png
      pos = (0.0, -0.325)
      size = (0.4, 0.2)
      startVal [time (s)] = 0.05
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    MouseComponent mouse
      clickable = scale
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.05
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    TextComponent sureRight
      color = $colorScale
      languageStyle = RTL
      letterHeight = 0.03
      pos = $sureRightPos
      startVal [time (s)] = 0.05
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      text:
        I'm sure
        RIGHT LAKE
    TextComponent sureLeft
      color = $colorScale
      letterHeight = 0.03
      pos = $sureLeftPos
      startVal [time (s)] = 0.05
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      text:
        I'm sure
        LEFT LAKE
    TextComponent dontKnow
      color = $colorScale
      letterHeight = 0.03
      pos = (0, -0.19)
      startVal [time (s)] = 0.05
      text = I don't know
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    CodeComponent SetMousePos
      Code Type = Auto->JS
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      Begin Routine:
        mouse.setVisible(True)
        mouse.setPos([0,-0.42])
  Routine Choice2
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  Routine TrainingInstruction
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    TextComponent TrainingInstrTxt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $Consigne
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      color = [-0.05, -0.05, -0.05]
      letterHeight = 0.03
      pos = (0,-0.46)
      startVal [time (s)] = 0.0
      text = Press Space to proceed
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Flow
  Routine Variable
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 100
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    Routine instructions1
    Routine instructions2
    Routine instructionsRepeat
  LoopTerminator instructions
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = TrainingFiles/TrainingInstructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Consigne': "1) Let's start using red and back fishes in the lakes to make a decision", 'TrainingFiles': 'TrainingFiles/Training1.xlsx'},
      {'Consigne': "2) Well done! Now, let's use the time spent fishing in the right or left lake to reach a decision", 'TrainingFiles': 'TrainingFiles/Training2.xlsx'},
      {'Consigne': "3) Well done! Finally, let's try to combine these two pieces of information to make your decision", 'TrainingFiles': 'TrainingFiles/Training3.xlsx'}]
    Routine TrainingInstruction
    LoopInitiator training loopType="TrialHandler"
      conditionsFile = $TrainingFile
      loopType = fullRandom
      nReps = 1
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      Routine baskets
      Routine choice_train
    LoopTerminator training
  LoopTerminator trials_3
  Routine toExperiment
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = BlockFiles/BlockConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Blockk': 1, 'Fichier': 'BlockFiles/Block1.xlsx'},
      {'Blockk': 2, 'Fichier': 'BlockFiles/Block2.xlsx'},
      {'Blockk': 3, 'Fichier': 'BlockFiles/Block3.xlsx'},
      {'Blockk': 4, 'Fichier': 'BlockFiles/Block4.xlsx'},
      {'Blockk': 5, 'Fichier': 'BlockFiles/Block5.xlsx'},
      {'Blockk': 6, 'Fichier': 'BlockFiles/Block6.xlsx'},
      {'Blockk': 7, 'Fichier': 'BlockFiles/Block7.xlsx'},
      {'Blockk': 8, 'Fichier': 'BlockFiles/Block8.xlsx'}]
    Routine breakscreen
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $Fichier
      loopType = random
      nReps = 1
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      Routine baskets
      Routine choice_train
    LoopTerminator trials
  LoopTerminator trials_2
  Routine finalScreen
